PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = mid_practice
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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
    ImageComponent reward_high_cue
      image = /Users/haroonpopal/Library/CloudStorage/GoogleDrive-popal.haroon@gmail.com/My Drive/Work/consulting/mid-v3/MID/stimuli/reward_high.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent reward_target
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent response_reward_target
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1
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    PolygonComponent fixation_3
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
Flow
  Routine trial
